CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:NeuritenessImage
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:NeuritenessImage
    Name the primary objects to be identified:net1_high
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:net1_high
    Name the output image:net1highimage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:net1highimage
    Select method for constructing file names:From image filename
    Select image name for file prefix:NeuritenessImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:net
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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