CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:106
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*)_(?P<image>.*).png
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".png")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*).tif
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".tif")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'basal': u'Example', u'raw': u'Example', u'apical': u'Example', u'eline': u'Example', u'nethigh': u'Example'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_A.png")
    Name to assign these images:apical
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_B.png")
    Name to assign these images:basal
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_E.png")
    Name to assign these images:eline
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_neurnet.png")
    Name to assign these images:nethigh
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify apical line as object']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
    Select the input image:apical
    Name the primary objects to be identified:apicalline
    Typical diameter of objects, in pixel units (Min,Max):20,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:6|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notes:['Convert apical line object to image']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
    Select the input objects:apicalline
    Name the output image:apicalImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:7|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notes:['invert the apical line image']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ApicalInvert
    Image or measurement?:Image
    Select the first image:apicalImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:8|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notes:['Create a distance transform of the apical line']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
    Select the input image:ApicalInvert
    Name the output image:ApicalDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the basal line']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
    Select the input image:basal
    Name the primary objects to be identified:basalline
    Typical diameter of objects, in pixel units (Min,Max):20,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:10|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notes:['Convert basal line object to image']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
    Select the input objects:basalline
    Name the output image:basalImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:11|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notes:['Invert basal line image ']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:BasalInvert
    Image or measurement?:Image
    Select the first image:basalImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:12|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notes:['Create a distance transform of the basal line image']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
    Select the input image:BasalInvert
    Name the output image:BasalDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

IdentifyPrimaryObjects:[module_num:13|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notes:['identify the e-cadherin line']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
    Select the input image:eline
    Name the primary objects to be identified:eline
    Typical diameter of objects, in pixel units (Min,Max):20,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:14|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notes:['Convert e-cadherin line object to image']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
    Select the input objects:eline
    Name the output image:elineImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:15|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notes:['Invert the e-cadherin line image']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:EInvert
    Image or measurement?:Image
    Select the first image:elineImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:16|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notes:['Create a distance transform of the e-cadherin line']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
    Select the input image:EInvert
    Name the output image:EDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

ColorToGray:[module_num:17|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notes:['Create a grayscale image of the RGB raw image']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
    Select the input image:raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:18|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notes:['Split the raw RGB image into separate RGB channels ']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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:19|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notes:['Identify the whole region of interest (ROI) object from the black background. (When exporting the manually outlined epithelial area (ROI) from Pannoramic Viewer the ROI is exported on a black background.)']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
    Select the input image:OrigGray
    Name the primary objects to be identified:ROI
    Typical diameter of objects, in pixel units (Min,Max):100,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.001
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
ConvertObjectsToImage:[module_num:20|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notes:['Convert the ROI object to image']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
    Select the input objects:ROI
    Name the output image:ROIImage
    Select the color format:Binary (black & white)
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
ExpandOrShrinkObjects:[module_num:21|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notes:['Expand the E-cadherin line object by 2 pixels, to be used to split the ROI into two parts. ']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
    Select the input objects:eline
    Name the output objects:elineLarge
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
MaskObjects:[module_num:22|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notes:['Mask the larger E-cadherin line with the ROI object, to remove the few pixels of the expanded E-cadherin line that extend outside the ROI ']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
    Select objects to be masked:elineLarge
    Name the masked objects:MaskedElineLarge
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ROI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:23|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notes:['Convert the masked E-cadherin line to an image']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
    Select the input objects:MaskedElineLarge
    Name the output image:elineLargeImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:24|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notes:['Subtract the large E-cadherin line from the ROI image']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:TwoROI
    Image or measurement?:Image
    Select the first image:ROIImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:elineLargeImage
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:25|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notes:['Identify the now separated two obejcts within the ROI']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
    Select the input image:TwoROI
    Name the primary objects to be identified:ROIs
    Typical diameter of objects, in pixel units (Min,Max):10,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.2
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:26|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notes:['Measure the area of the two objects within the ROI']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
    Select objects to measure:ROIs
    Calculate the Zernike features?:No

FilterObjects:[module_num:27|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notes:['Based on size, the larger area of the two objects is defined as the E-cadherin part']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
    Select the objects to filter:ROIs
    Name the output objects:Ecad
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
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
MaskObjects:[module_num:28|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notes:['The E-cadherin part is then masked away from the ROI object, to identify the superficial layer ']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
    Select objects to be masked:ROI
    Name the masked objects:Superficial
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Ecad
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:29|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notes:['Identify nuclei objects']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:12
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
SplitOrMergeObjects:[module_num:30|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notes:['Merge nuclei within 6 pixels of each other ']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
    Select the input objects:Nuclei
    Name the new objects:NucleiDense
    Operation:Merge
    Maximum distance within which to merge objects:6
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:31|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notes:['Measure the size of the merged nuclei objects']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
    Select objects to measure:NucleiDense
    Calculate the Zernike features?:No

FilterObjects:[module_num:32|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notes:['Filter merged nuclei objects smaller than 5000 pixels. These smaller merged nuclei objects can be only two nuclei that are closely located, i.e. not part of the parabasal layer.']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
    Select the objects to filter:NucleiDense
    Name the output objects:NucleiChunks
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5000
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:33|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notes:['Convert the large merged nuclei objects to image']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
    Select the input objects:NucleiChunks
    Name the output image:NucleiChunksImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:34|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notes:['To smooth the edge of the merged nuclei to create a more coherent parabasal layer, the merged nuclei image is first inverted. ']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedNucChunks
    Image or measurement?:Image
    Select the first image:NucleiChunksImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:35|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notes:['A distance transform is created, scaled 0-1']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
    Select the input image:InvertedNucChunks
    Name the output image:DistanceNucChunks
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:Yes

IdentifyPrimaryObjects:[module_num:36|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notes:['The parabasal area object is identified using a 0.018 threshold of the distance transform image']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
    Select the input image:DistanceNucChunks
    Name the primary objects to be identified:ParabasalArea
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.018
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
MaskObjects:[module_num:37|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notes:['The parabasal area is masked by the ROI to remove parts of parabasal area that extend outside the ROI.']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
    Select objects to be masked:ROI
    Name the masked objects:Parabasal
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ParabasalArea
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:38|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notes:['The parabasal layer is converted to an image to be saved. ']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
    Select the input objects:Parabasal
    Name the output image:parabasalImage
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:39|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notes:['The E-cadherin net object is identified from the uploaded image, holes are filled using the fill holes alternative. ']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
    Select the input image:nethigh
    Name the primary objects to be identified:netblock
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:40|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notes:['The identified net structure block is converted to image']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
    Select the input objects:netblock
    Name the output image:netblockImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:41|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notes:['The ROI image is inverted. ']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedROI
    Image or measurement?:Image
    Select the first image:ROIImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:42|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notes:['The parabasal layer, the inverted ROI area is added to the net-block image. ']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Netwhitebg
    Image or measurement?:Image
    Select the first image:InvertedROI
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:netblockImage
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:parabasalImage
    Multiply the third image by:1.0
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
IdentifyPrimaryObjects:[module_num:43|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notes:['New objects are identified, when the ROI background is white, the whole parabasal and intact net-structure will form one object.']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
    Select the input image:Netwhitebg
    Name the primary objects to be identified:Netblocks
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:44|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notes:['Measure the area of the net-block objects (this include the main object as well as the separate thin net structures)']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
    Select objects to measure:Netblocks
    Calculate the Zernike features?:No

FilterObjects:[module_num:45|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notes:['Filter to retrieve the net-block object with largest area. ']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
    Select the objects to filter:Netblocks
    Name the output objects:NetBlock
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
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
MaskObjects:[module_num:46|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notes:['Mask the ROI with netblock object, to remove the area outside the ROI.']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
    Select objects to be masked:ROI
    Name the masked objects:MaskedNetblock
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NetBlock
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:47|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notes:['Convert the net block area to image.']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
    Select the input objects:MaskedNetblock
    Name the output image:maskednetblockImage
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:48|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notes:['Identify the areas with no or non-intact E-cadherin net i.e. a hypothetically named the “ virus-reach” area. ']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
    Select the input image:maskednetblockImage
    Name the primary objects to be identified:virusreaches
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:49|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notes:['Measure the area of the virus reach objects']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
    Select objects to measure:virusreaches
    Calculate the Zernike features?:No

FilterObjects:[module_num:50|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notes:['To retrieve the area starting from the superficial layer and extending down through the E-cadherin net that has any openings, the smaller “virus-reach” objects are removed by filter. ']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
    Select the objects to filter:virusreaches
    Name the output objects:VirusReach
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
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
ConvertObjectsToImage:[module_num:51|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notes:['Convert to image.']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
    Select the input objects:VirusReach
    Name the output image:VirusReachImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:52|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notes:['Invert the image.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Invertedvirusreach
    Image or measurement?:Image
    Select the first image:VirusReachImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:53|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notes:['Create a distance transform of the “virus-reach” area to smoothed the edge. ']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
    Select the input image:Invertedvirusreach
    Name the output image:VirusreachDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:Yes

IdentifyPrimaryObjects:[module_num:54|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notes:['Identify a smoothed “virus-reach” object by a treshold of 0.015 in the distance transform image. ']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
    Select the input image:VirusreachDistance
    Name the primary objects to be identified:VirusReachBlock
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.015
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
MaskObjects:[module_num:55|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notes:['Remove any parts of the “virus-reach” object that extends outside the ROI.']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
    Select objects to be masked:ROI
    Name the masked objects:VR1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:VirusReachBlock
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:56|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notes:['Mask away any parts of the “virus-reach” object that extends into the parabasal layer. ']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
    Select objects to be masked:VR1
    Name the masked objects:VR
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Parabasal
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:57|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notes:['Convert the superficial object to an image.']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
    Select the input objects:Superficial
    Name the output image:SuperficialImage
    Select the color format:Binary (black & white)
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
MaskObjects:[module_num:58|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notes:['Remove the superficial layer from the “virus-reach” area to identify the upper intermediate layer. ']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
    Select objects to be masked:VR
    Name the masked objects:Upper_intermediate
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Superficial
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:59|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
    Select the input objects:Upper_intermediate
    Name the output image:Upper_intermediateImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:60|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notes:['Identify the lower intermediate layer by subtracting the other layers from the ROI image.']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:LowerIntermediateImage
    Image or measurement?:Image
    Select the first image:ROIImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:parabasalImage
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:SuperficialImage
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Upper_intermediateImage
    Multiply the fourth image by:1.0
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
ImageMath:[module_num:61|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notes:['Create a new object of both parabasal and lower intermediate layer.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ParaAndLower
    Image or measurement?:Image
    Select the first image:parabasalImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:LowerIntermediateImage
    Multiply the second image by:1.0
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
ExpandOrShrinkObjects:[module_num:62|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notes:['To find the line between the upper and the lower intermediate layer, the “virus-reach” object i.e. the superficial and upper intermediate layer combined, is expanded with 3 pixels. ']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
    Select the input objects:VR
    Name the output objects:VRplus3
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:63|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notes:['The expanded “virus-reach” object was masked with the combined parabasal + lower intermediate layer.']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
    Select objects to be masked:VRplus3
    Name the masked objects:VRlines
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ParaAndLower
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

SplitOrMergeObjects:[module_num:64|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notes:['Create separate objects of each separate part of this line between upper and lower intermediate layer, called VR line. ']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
    Select the input objects:VRlines
    Name the new objects:VRlinesseparate
    Operation:Split
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
MeasureObjectSizeShape:[module_num:65|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notes:['Measure the area of the different VR line objects. ']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
    Select objects to measure:VRlinesseparate
    Calculate the Zernike features?:No

FilterObjects:[module_num:66|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notes:['Save the longest line by filter away smaller objects. ']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
    Select the objects to filter:VRlinesseparate
    Name the output objects:VRline
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
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
ConvertObjectsToImage:[module_num:67|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notes:['Convert the VR line (the line between upper and lower intermediate layer) to image']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
    Select the input objects:VRline
    Name the output image:VRlineImage
    Select the color format:Binary (black & white)
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
ExpandOrShrinkObjects:[module_num:68|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notes:['To define the line between the parabasal and lower intermediate layer, the parabasal object is first expanded by 3 pixels. ']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
    Select the input objects:Parabasal
    Name the output objects:paraplus3
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:69|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notes:['The expanded parabasal layer is then masked by the lower intermediate layer. ']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
    Select objects to be masked:paraplus3
    Name the masked objects:paraline
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:LowerIntermediateImage
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:70|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notes:['Measure the area of the line separating the parabasal and lower intermediate layer. ']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
    Select the input objects:paraline
    Name the output image:ParalineImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:71|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notes:['Invert the VR line image']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:VRInvert
    Image or measurement?:Image
    Select the first image:VRlineImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:72|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notes:['Create a distance transform of the VR line']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
    Select the input image:VRInvert
    Name the output image:VRDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

ImageMath:[module_num:73|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notes:['Invert the line between the parabasal and lower intermediate layer.']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ParalineInvert
    Image or measurement?:Image
    Select the first image:ParalineImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:74|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notes:['Create a distance transform from the line between the parabasal and the lower intermediate layer. ']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
    Select the input image:ParalineInvert
    Name the output image:ParalineDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

OverlayOutlines:[module_num:75|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notes:['Display the different layers on the raw image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:apicalline
    Select outline color:Green
    Select objects to display:eline
    Select outline color:#FC7F08
    Select objects to display:paraline
    Select outline color:Yellow
    Select objects to display:VRline

SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:SuperficialImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_sup
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:77|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
    Select the type of image to save:Image
    Select the image to save:Upper_intermediateImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_upper
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:78|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
    Select the type of image to save:Image
    Select the image to save:LowerIntermediateImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_lower
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:79|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
    Select the type of image to save:Image
    Select the image to save:parabasalImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_para
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:80|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
    Hidden:10
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:ROI
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Superficial
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Upper_intermediate
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    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:LowerIntermediateImage
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Parabasal
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:apicalline
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:basalline
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:eline
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:VRline
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:paraline
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
MeasureImageIntensity:[module_num:81|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
    Select the image to measure:ApicalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:eline
    Select the image to measure:ApicalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:basalline
    Select the image to measure:BasalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:apicalline
    Select the image to measure:BasalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:eline
    Select the image to measure:EDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:apicalline
    Select the image to measure:EDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:basalline
    Select the image to measure:VRDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:eline
    Select the image to measure:VRDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:paraline
    Select the image to measure:ParalineDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:VRline
    Select the image to measure:ParalineDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:basalline
    Select the image to measure:BasalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:paraline
    Select the image to measure:EDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:VRline
    Select the image to measure:ApicalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:VRline
    Select the image to measure:VRDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:apicalline
    Select the image to measure:BasalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:VRline
    Select the image to measure:VRDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:basalline

CalculateMath:[module_num:82|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notes:['Calculate the average distance from the basalline to the apical line (in the apical line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromBasaltoApical
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ApicalDistance_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:83|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notes:['Calculate the average distance from the E-cadherin line to the apical line (in the apical line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromEtoApical
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ApicalDistance_eline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_eline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:84|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notes:['Calculate the average distance from the apical line to the basal line (in the basal line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromApicaltoBasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_BasalDistance_apicalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_apicalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:85|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notes:['Calculate the average distance from the Ecadherin line to the basal line (in the basal line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromEtoBasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_BasalDistance_eline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_eline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:86|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notes:['Calculate the average distance from the apical line to the Ecadherin line (in the Ecadherin line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromApicaltoE
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_EDistance_apicalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_apicalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:87|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notes:['Calculate the average distance from the basal line to the Ecadherin line (in the Ecadherin line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromBasaltoE
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_EDistance_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:88|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notes:['Calculate the average distance from the Ecadherin line to the line between the upper and lower intermediate layer line (in the upper-lower (VR) line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromEtoVRline
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_VRDistance_eline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_eline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:89|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notes:['Calculate the average distance from the line between the parabasal and lower intermediate line to the line between the upper and lower intermediate layer line (in the upper-lower (VR) line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromParatoVRline
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_VRDistance_paraline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_paraline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:90|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notes:['Calculate the average distance from the basal line to the line between the parabasal and lower intermediate layer line (in the parabasal-lower line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromBastoParaline
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ParalineDistance_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:91|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notes:['Calculate the average distance from the VR (line between the upper and lower intermediate) line to the line between the parabasal and lower intermediate layer line (in the parabasal-lower line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromVRtoParaline
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ParalineDistance_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:92|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notes:['Calculate the average distance from the parabasal-lower intermediate line to the basal line (in the basal line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromParatoBasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_BasalDistance_paraline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_paraline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:93|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notes:['Calculate the average distance from the upper-lower intermediate line to the Ecadherin line (in the Ecadherin line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromVRtoE
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_EDistance_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:94|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notes:['Calculate the average distance from the upper-lower intermediate line to the apical line (in the apical line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromVRtoapical
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ApicalDistance_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:95|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notes:['Calculate the average distance from the apical line to the upper-lower intermediate line (in the upper-lower intermediate line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromApicaltoVR
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_VRDistance_apicalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_apicalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:96|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notes:['Calculate the average distance from the basal line to the upper-lower intermediate line (in the upper-lower intermediate line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromBasaltoVR
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_VRDistance_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_basalline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:97|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notes:['Calculate the average distance from the upper-lower intermediate line to the basal line (in the basal line distance image), in µm (by multiplying each pixel with 0.325µm)']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
    Name the output measurement:FromVRtoBasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_BasalDistance_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_VRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:98|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveTotThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromApicaltoBasal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromBasaltoApical
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:99|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveSupThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromApicaltoE
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromEtoApical
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:100|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveEcadThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromBasaltoE
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromEtoBasal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:101|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveUpThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromEtoVRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromVRtoE
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:102|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveLowThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromParatoVRline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromVRtoParaline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:103|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveParaThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromBastoParaline
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromParatoBasal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:104|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveVRthick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromApicaltoVR
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromVRtoapical
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:105|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notes:['Calculate the average distance between top-bottom and bottom-top measurement. ']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
    Name the output measurement:AveIntactEcadThick
    Operation:Add
    Select the first operand measurement type:Image
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    Select the first operand measurement:Math_FromBasaltoVR
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Select the second operand measurement:Math_FromVRtoBasal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.5
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:106|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Images_from_pipe2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_basalline,Image|Count_eline,Image|Count_apicalline,Image|AreaOccupied_AreaOccupied_ROI,Image|AreaOccupied_AreaOccupied_Superficial,Image|AreaOccupied_AreaOccupied_Upper_intermediate,Image|AreaOccupied_AreaOccupied_VRline,Image|AreaOccupied_AreaOccupied_eline,Image|AreaOccupied_AreaOccupied_paraline,Image|AreaOccupied_AreaOccupied_LowerIntermediateImage,Image|AreaOccupied_AreaOccupied_apicalline,Image|AreaOccupied_AreaOccupied_Parabasal,Image|AreaOccupied_AreaOccupied_basalline,Image|FileName_raw,Image|Math_FromParatoBasal,Image|Math_FromApicaltoBasal,Image|Math_AveEcadThick,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Thick_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
