CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*)_(?P<image>.*).png
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Upper': u'Example', u'Lower': u'Example', u'Parabasal': u'Example', u'nethigh': u'Example', u'raw': u'Example'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_neurnet.png")
    Name to assign these images:nethigh
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_upper.png")
    Name to assign these images:Upper
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_lower.png")
    Name to assign these images:Lower
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_para.png")
    Name to assign these images:Parabasal
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the raw RGB image into separate RGB channels']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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:6|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notes:['Combine the raw RGB image to a grayscale image']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
    Select the input image:raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the E-cadherin net from the nethigh image.']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
    Select the input image:nethigh
    Name the primary objects to be identified:nethigh
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify ROI from the grayscale raw image. ']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
    Select the input image:OrigGray
    Name the primary objects to be identified:ROI
    Typical diameter of objects, in pixel units (Min,Max):100,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.001
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
ExpandOrShrinkObjects:[module_num:9|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notes:['Shrink the ROI with 12 pixels to remove edge effects. ']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
    Select the input objects:ROI
    Name the output objects:CutROI
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:12
    Fill holes in objects so that all objects shrink to a single point?:No

MeasureImageAreaOccupied:[module_num:10|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notes:['Measure the image area occupied by the four epithelial layers.']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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Parabasal
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Lower
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Upper

MaskObjects:[module_num:11|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notes:['Mask away the ROI edges from the net image.']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
    Select objects to be masked:nethigh
    Name the masked objects:NetincutROI
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CutROI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:12|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notes:['Mask out the net within the parabasal layer']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
    Select objects to be masked:NetincutROI
    Name the masked objects:NetinPara
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Parabasal
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:13|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notes:['Mask out the net within the lower intermediate layer']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
    Select objects to be masked:NetincutROI
    Name the masked objects:NetinLower
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Lower
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:14|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notes:['Mask out the net within the upper intermediate layer']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
    Select objects to be masked:NetincutROI
    Name the masked objects:NetinUpp
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Upper
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageIntensity:[module_num:15|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notes:['Measure the intensity in the original green (e-cadherin) channel within the net structures within the four epithelial layers, as well as in the net structure in the whole ROI.']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
    Select the image to measure:OrigGreen
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:NetinPara
    Select the image to measure:OrigGreen
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:NetinLower
    Select the image to measure:OrigGreen
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:NetinUpp
    Select the image to measure:OrigGreen
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:nethigh

MeasureImageAreaOccupied:[module_num:16|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:NetinPara
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:NetinLower
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:NetinUpp
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
CalculateMath:[module_num:17|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notes:['Calculate the percentage of E-cadherin net structure area per total area of each layer.']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
    Name the output measurement:PCNetinParabasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_NetinPara
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Parabasal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:18|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notes:['Calculate the percentage of E-cadherin net structure area per total area of each layer.']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
    Name the output measurement:PCNetinLower
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_NetinLower
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Lower
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:19|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notes:['Calculate the percentage of E-cadherin net structure area per total area of each layer.']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
    Name the output measurement:PCNetinUpper
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_NetinUpp
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Upper
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_Upper,Image|AreaOccupied_AreaOccupied_Lower,Image|AreaOccupied_AreaOccupied_NetinPara,Image|AreaOccupied_AreaOccupied_Parabasal,Image|AreaOccupied_AreaOccupied_NetinLower,Image|AreaOccupied_AreaOccupied_NetinUpp,Image|Math_PCNetinParabasal,Image|Math_PCNetinLower,Image|Math_PCNetinUpper,Image|Metadata_Example
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NetIntin3layers_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
