CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the original RGB image to separate color channels']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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:6|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notes:['Combine the RGB original color image into a grayscale image']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
    Select the input image:raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the ROI object']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
    Select the input image:OrigGray
    Name the primary objects to be identified:ROI
    Typical diameter of objects, in pixel units (Min,Max):6,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.001
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhance speckles to separate the positively stained area from the diffuse background']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
    Select the input image:OrigRed
    Name the output image:RedSpeckles
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Fast

MeasureImageIntensity:[module_num:9|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notes:['Measure the image intensity of the original red image']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
    Select the image to measure:OrigRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:ROI

CalculateMath:[module_num:10|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notes:['Calculate the treshold, set to 0.7 x lower quartile intensity of the original red channel image. ']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
    Name the output measurement:LQThresholdRed
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_LowerQuartileIntensity_OrigRed_ROI
    Multiply the above operand by:0.7
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
Threshold:[module_num:11|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notes:['Define the CD4 positive area by using the threshold in the enhanced red image. ']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
    Select the input image:RedSpeckles
    Name the output image:RedPos
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Math_LQThresholdRed
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
IdentifyPrimaryObjects:[module_num:12|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notes:['Set a size treshold to remove small <2 pixels objects.']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
    Select the input image:RedPos
    Name the primary objects to be identified:RedPos
    Typical diameter of objects, in pixel units (Min,Max):2,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:13|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notes:['Shrink the ROI with 12 pixels to remove artefacts around the ROI edges created by the enhance feature module.']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
    Select the input objects:ROI
    Name the output objects:CutROI
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:12
    Fill holes in objects so that all objects shrink to a single point?:No

RescaleIntensity:[module_num:14|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notes:['Increase the intensity to facilitate the EditObjectsManually module']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
    Select the input image:OrigRed
    Name the output image:RescaledRed
    Rescaling method:Divide each image by the same value
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    Divisor value:0.2
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
GrayToColor:[module_num:15|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notes:['Combined the rescaled red image with the blue nuclei image.']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
    Select a color scheme:RGB
    Select the image to be colored red:RescaledRed
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    Select the image to be colored blue:OrigBlue
    Name the output image:RedBlue
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
MaskObjects:[module_num:16|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notes:['Remove the edge artefacts by masking the segmented CD4 (red) positive areas with the cut ROI mask.']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
    Select objects to be masked:RedPos
    Name the masked objects:RedPosCut
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CutROI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

EditObjectsManually:[module_num:17|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notes:['This module identifies the areas of the ROI that contain false positive objects. ', 'Click reverse selection', '', 'Click F (to freehand draw)', '', 'Draw around the false positive objects (background) ', '', 'Click done', '', '']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
    Select the objects to be edited:RedPosCut
    Name the edited objects:Background
    Numbering of the edited objects:Retain
    Display a guiding image?:Yes
    Select the guiding image:RedBlue
    Allow overlapping objects?:Yes

MaskObjects:[module_num:18|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notes:['Remove the identified background areas from the segmented positively stained CD4 areas.']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
    Select objects to be masked:RedPosCut
    Name the masked objects:RedAreas
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Background
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:19|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notes:['Convert the final CD4 areas objects to an image']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
    Select the input objects:RedAreas
    Name the output image:RedObjects
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:20|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notes:['Save the CD4 positive areas as an image']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
    Select the type of image to save:Image
    Select the image to save:RedObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_redobjects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:21|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notes:['Measure the area of both the CD4 positive areas, the whole ROI (the cut version) as well as the CD4 positive areas prior to manual background removal (RedAreas)']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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RedPosCut
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CutROI
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RedAreas
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
CalculateMath:[module_num:22|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notes:['Calculate the frequency, the percentage of CD4 positive areas out of total epithelial (ROI) area analyzed.']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
    Name the output measurement:RedAreaofROI
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_RedAreas
    Multiply the above operand by:1
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_CutROI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Images_from_pipe4
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_CutROI,Image|AreaOccupied_AreaOccupied_RedPosCut,Image|AreaOccupied_AreaOccupied_RedAreas,Image|FileName_raw,Image|Math_RedAreaofROI,Image|Math_LQThresholdRed
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CD4_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
