CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*)_(?P<image>.*).png
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".png")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'apical': u'Example', u'redobjects': u'Example'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_A.png")
    Name to assign these images:apical
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_redobjects.png")
    Name to assign these images:redobjects
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:apical
    Name the primary objects to be identified:apicalline
    Typical diameter of objects, in pixel units (Min,Max):20,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:apicalline
    Name the output image:apicalImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ApicalInvert
    Image or measurement?:Image
    Select the first image:apicalImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:8|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
    Select the input image:ApicalInvert
    Name the output image:ApicalDistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:redobjects
    Name the primary objects to be identified:redobjects
    Typical diameter of objects, in pixel units (Min,Max):20,10000000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureImageIntensity:[module_num:10|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
    Select the image to measure:ApicalDistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:redobjects

CalculateMath:[module_num:11|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
    Name the output measurement:AveDistCD4fromApicalum
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_ApicalDistance_redobjects
    Multiply the above operand by:0.325
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:0.325
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_apical,Image|Math_AveDistCD4fromApicalum,Image|Metadata_Example
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DistCD4_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
