CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*)_(?P<image>.*).png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Upper': u'Example', u'Lower': u'Example', u'Parabasal': u'Example', u'Redobjects': u'Example'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_upper.png")
    Name to assign these images:Upper
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_lower.png")
    Name to assign these images:Lower
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_para.png")
    Name to assign these images:Parabasal
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "_redobjects.png")
    Name to assign these images:Redobjects
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Redobjects
    Name the primary objects to be identified:Redobjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureImageAreaOccupied:[module_num:6|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Parabasal
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Lower
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:Upper

MaskObjects:[module_num:7|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
    Select objects to be masked:Redobjects
    Name the masked objects:RedinPara
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Parabasal
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:8|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
    Select objects to be masked:Redobjects
    Name the masked objects:RedinLower
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Lower
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:9|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
    Select objects to be masked:Redobjects
    Name the masked objects:RedinUpper
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Upper
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureImageIntensity:[module_num:10|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
    Select the image to measure:Redobjects
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RedinPara
    Select the image to measure:Redobjects
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RedinLower
    Select the image to measure:Redobjects
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RedinUpper
    Select the image to measure:Redobjects
    Measure the intensity only from areas enclosed by objects?:No
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
CalculateMath:[module_num:11|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
    Name the output measurement:PCRedinParabasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_Redobjects_RedinPara
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Parabasal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:12|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
    Name the output measurement:PCRedinLower
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_Redobjects_RedinLower
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Lower
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:13|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
    Name the output measurement:PCRedinUpper
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_Redobjects_RedinUpper
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_Upper
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:14|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
    Name the output measurement:DistributionofRedinParabasal
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_Redobjects_RedinPara
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_TotalIntensity_Redobjects
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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
    Name the output measurement:DistributionofRedinlower
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_Redobjects_RedinLower
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_TotalIntensity_Redobjects
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:16|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
    Name the output measurement:DistributionofRedinUpper
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_Redobjects_RedinUpper
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Intensity_TotalIntensity_Redobjects
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_Upper,Image|AreaOccupied_AreaOccupied_Lower,Image|AreaOccupied_AreaOccupied_Parabasal,Image|Math_PCRedinUpper,Image|Math_DistributionofRedinParabasal,Image|Math_DistributionofRedinlower,Image|Math_PCRedinLower,Image|Math_PCRedinParabasal,Image|Math_DistributionofRedinUpper,Image|Metadata_Example
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:RedArea_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
