CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*)_(?P<image>.*).png
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'raw': u'Example', u'border': u'Example'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain ".tif")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does contain ".png")
    Name to assign these images:border
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:border
    Name the primary objects to be identified:border
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:1
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
EditObjectsManually:[module_num:6|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
    Select the objects to be edited:border
    Name the edited objects:Apical
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:raw
    Allow overlapping objects?:No

EditObjectsManually:[module_num:7|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
    Select the objects to be edited:border
    Name the edited objects:Basal
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:raw
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:Apical
    Name the output image:ApicalImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Basal
    Name the output image:BasalImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:ApicalImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_A
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe_II
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:BasalImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_B
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe_II
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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