CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Example>.*)_(?P<image>.*).png
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'edit': u'Example', u'raw': u'Example'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain ".png")
    Name to assign these images:edit
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:edit
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:ecadline
    Typical diameter of objects, in pixel units (Min,Max):20,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:ecadline
    Name the output image:Ecadline
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:Ecadline
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_E
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe_IV
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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