CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:raw
    Name the primary objects to be identified:roi
    Typical diameter of objects, in pixel units (Min,Max):100,400000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.001
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:roi
    Name the output objects:ShrunkROI
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No

MaskObjects:[module_num:7|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
    Select objects to be masked:roi
    Name the masked objects:ROIoutlines
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ShrunkROI
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ConvertObjectsToImage:[module_num:8|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
    Select the input objects:ROIoutlines
    Name the output image:ROI_outlines_Image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:ROI_outlines_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_roi
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images_from_pipe_I
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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